graphs:

  # The publish/subscribe broker graph
  - id: PubSubBroker
    nodes:
    - id: Broker
      module: timeflux.nodes.zmq
      class: Broker
    rate: 25

  # The main processing graph
  - id: AcquireEEG
    nodes:
    - id: acquire
      module: timeflux_brainflow.nodes.driver
      class: BrainFlow
      params:
        board: freeeeg32
        channels: [ch1, ch2, ch3, ch4, ch5, ch6, ch7, ch8, ch9, ch10, ch11, ch12, ch13, ch14, ch15, ch16, ch17, ch18, ch19, ch20, ch21, ch22, ch23, ch24, ch25, ch26, ch27, ch28, ch29, ch30, ch31, ch32]
        serial_port: /dev/cu.usbmodem398B336332331 # USB
    - id: PublisherRaw
      module: timeflux.nodes.query
      class: Pub
      params:
        topic: raw
    edges:
      - source: acquire
        target: PublisherRaw
    rate: 25

  - id: Sender
    nodes:
    - id: Subscriber
      module: timeflux.nodes.zmq
      class: Sub
      params:
        topics:
        - raw
        - raw2
    - id: outlet
      module: timeflux.nodes.lsl
      class: Send
      params:
        name: openvibeSignal
        type: EEG
    edges:
      - source: Subscriber:raw
        target: outlet
    rate: 25

  - id: AcquireEEG2
    nodes:
    - id: LSL
      module: timeflux.nodes.lsl
      class: Receive
      params:
        prop: name
        value: openvibeSignal
    - id: PublisherRaw2
      module: timeflux.nodes.zmq
      class: Pub
      params:
        address: "tcp://localhost:5556"  # Use a different port
        topic: raw2
    edges:
      - source: LSL
        target: PublisherRaw2
    rate: 25

  - id: StreamToBrowser
    nodes:
    - id: Subscriber
      module: timeflux.nodes.zmq
      class: Sub
      params:
        address: "tcp://localhost:5555"
        topics:
        - raw
        - raw2
    - id: monitor
      module: timeflux_ui.nodes.ui
      class: UI
    edges:
      - source: Subscriber:raw
        target: monitor:eeg_raw
      - source: Subscriber:raw2
        target: monitor:eeg_raw2
    rate: 25

  - id: StreamToBDF
    nodes:
    - id: Subscriber
      module: timeflux.nodes.zmq
      class: Sub
      params:
        address: "tcp://localhost:5555"
        topics:
        - raw
        - raw2
    - id: WriteBDFWindow
      module: timeflux.nodes.window
      class: Window
      params:
        length: 512
        step: 512
        index: sample
    - id: Recorder
      module: timeflux_neurofeedback_inverse_gamepad.nodes.bdf
      class: Save
      params:
        file_type: 2
        eeg_channels: [ch17]
        sample_rate: 512
    edges:
      - source: Subscriber:raw
        target: WriteBDFWindow
      - source: WriteBDFWindow
        target: Recorder
    rate: 25

  - id: AcquireEEG2
    nodes:
    - id: LSL
      module: timeflux.nodes.lsl
      class: Receive
      params:
        prop: name
        value: openvibeSignal
    - id: PublisherRaw
      module: timeflux.nodes.zmq
      class: Pub
      params:
        topic: raw2
    edges:
      - source: LSL
        target: PublisherRaw
    rate: 25

  - id: StreamToBrowser
    nodes:
    - id: Subscriber
      module: timeflux.nodes.zmq
      class: Sub
      params:
        topics:
        - raw
        - raw2
        - iapf
    - id: monitor
      module: timeflux_ui.nodes.ui
      class: UI
    edges:
      - source: Subscriber:raw
        target: monitor:eeg_raw
      - source: Subscriber:raw2
        target: monitor:eeg_raw2
    rate: 25

  - id: StreamToBDF
    nodes:
    - id: Subscriber
      module: timeflux.nodes.zmq
      class: Sub
      params:
        topics:
        - raw
        - raw2
    - id: WriteBDFWindow
      module: timeflux.nodes.window
      class: Window
      params:
        length: 512
        step: 512
        index: sample
    - id: Recorder
      module: timeflux_neurofeedback_inverse_gamepad.nodes.bdf
      class: Save
      params:
        file_type: 2
        eeg_channels: [ch17]
        sample_rate: 512
    edges:
      - source: Subscriber:raw
        target: WriteBDFWindow
      - source: WriteBDFWindow
        target: Recorder
    rate: 25
